PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = labMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1440, 900]
  expName = pedestal_cursor_ibl
  keyboardBackend = ioHub
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Routines
  Routine trial
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    CodeComponent dragging_code
      Code Type = Py
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      Begin Experiment:
        correct = 9
      Begin Routine:
        mouse.setPos(newPos=(0, 0))

        r_lim_corr = 0.05
        l_lim_corr = -0.05
        r_lim_wrong = 30
        l_lim_wrong = -30

        mouserec = mouse.getPos()
        moved = False
      Each Frame:
        x = mouse.getPos()[0]
        #y = mouse.getPos()[1]

        if moved == False:
             mouseloc = mouse.getPos()
             if mouseloc[0] != mouserec[0] or mouseloc[1] != mouserec[1]:
                  moved = True
                  thisExp.addData('reaction_time',round(t*1000))

        x_r = x + 15
        x_l = x - 15

        grating_r.pos = (x_r,0)
        grating_l.pos = (x_l,0)

        if grating_r.overlaps(dot):
            dot.pos = grating_r.pos
        elif grating_l.overlaps(dot):
            dot.pos = grating_l.pos


        if eccentricity > 0:
            if grating_r.pos[0] <= r_lim_corr:
                correct = 1
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_r.pos[0] >= r_lim_wrong:
                correct = 0
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
        elif eccentricity < 0:
            if grating_l.pos[0] >= l_lim_corr:
                correct = 1
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False
            elif grating_l.pos[0] <= l_lim_wrong:
                correct = 0
                timeout='n'
                thisExp.addData("response_time", round(t*1000))
                continueRoutine=False

        #if fixation.overlaps(dot):
        #    correct = 1
        #    timeout='n'
        #    thisExp.addData("response_time", round(t*1000))
        #    continueRoutine=False
        #elif dot.pos[0] > r_lim_wrong or dot.pos[0] < l_lim_wrong:
        #    correct = 0
        #    timeout='n'
        #    thisExp.addData("response_time", round(t*1000))
        #    continueRoutine=False
      End Routine:
        if correct!=1 and correct!=0:
            timeout='y'
            correct='NaN'

        thisExp.addData("correct", correct)
        thisExp.addData('timeout', timeout)
    ImageComponent fixation
      color [set every repeat] = $[0,0,0]
      image = fixation_object.png
      mask = circle
      saveStartStop = False
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = deg
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    PolygonComponent dot
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every repeat] = (eccentricity, 0)
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    GratingComponent grating_l
      contrast [set every repeat] = leftCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (-35, 0)
      saveStartStop = False
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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    GratingComponent grating_r
      contrast [set every repeat] = rightCont
      mask = gauss
      phase [set every repeat] = random.random()*360
      pos [set every repeat] = (35, 0)
      saveStartStop = False
      sf = 0.3
      size = (15, 15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    SoundComponent sound_trial_start
      saveStartStop = False
      sound = 5000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.1
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    SoundComponent sound_no_resp
      sound = 567
      startVal [time (s)] = 10
      stopVal [duration (s)] = 0.5
      volume = 0.1
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  Routine set_bias_condition
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    CodeComponent bias_rows_code
      Code Type = Py
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      Begin Experiment:
        bias_file = ""
        bias_yn = 0
      Begin Routine:
        if int(expInfo['participant'])%2 == 0:
            bias_file = "nobias_block.xlsx"
            bias_yn = 0

        else:
            bias_file = "bias_block.xlsx"
            bias_yn = 1

        thisExp.addData("bias_file", bias_file)
        thisExp.addData("bias_yn", bias_yn)
    CodeComponent windows_mousevisible
      Code Type = Py
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      Begin Routine:
        win.Mousevisible = False
  Routine fix
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    CodeComponent mouse_visible
      Code Type = Py
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      Begin Routine:
        win.mouseVisible = False
    CodeComponent set_iti
      Code Type = Py
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      Begin Experiment:
        iti = 0
        maxDur = 0.7
        minDur = 0.4
      Begin Routine:
        import random
        iti = minDur + (maxDur - minDur) * random.random()

        thisExp.addData("iti", iti)
    CodeComponent set_contrast_side
      Code Type = Py
      Begin Routine:
        #import random
        #deltaSide=(1, -1)[random.random()>biasPoint] # Using a ternary operator to pick a side at random (+ bias if required).
        # A bias point of .2 means that the stimulus has an 80% chance of being assigned a -1 value (it's most likely to be on the left).
        # The operator evaluates the thing on the right as 0 or 1 (true or false)
        # and then picks the 0th or 1th thing from the preceding list.

        #leftCont=baseContrast+contrastDelta*(deltaSide==-1)
        #rightCont=baseContrast+contrastDelta*(deltaSide==1)
        if eccentricity == -15:
            leftCont = baseContrast+contrastDelta
            rightCont = baseContrast
        elif eccentricity == 15:
            leftCont = baseContrast
            rightCont = basecontrast+contrastDelta

        signed_contrast=rightCont-leftCont

        #if leftCont == rightCont:
        #    eccentricity = -15
        #elif leftCont > rightCont:
        #    eccentricity = -15
        #elif rightCont > leftCont:
        #    eccentricity = 15

        # Save all these variables to the log
        thisExp.addData("signed_contrast", signed_contrast)
        thisExp.addData("leftCont", leftCont)
        thisExp.addData("rightCont", rightCont)
    ImageComponent fixation_2
      color [set every repeat] = $[1,1,1]
      image = fixation_object.png
      mask = circle
      saveStartStop = False
      size [set every repeat] = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      units = deg
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  Routine feedback
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    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        fb_sound = 100
        fb_dur = 10
      Begin Routine:
        if correct==1:
            fb_sound = 2000
            fb_sound_dur = 0.2
            fb_dur = 1

        else:
            fb_sound = "whitenoise.wav"
            fb_sound_dur = 0.5
            fb_dur = 2
    SoundComponent feedback_sound
      sound = $fb_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_sound_dur
      volume = 0.1
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    ImageComponent fixation_obj_2
      image = fixation_object.png
      mask = circle
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fb_dur
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  Routine outro
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    TextComponent outro_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        That's the end of the experiment.

        Thank you for participating!
        You can collect your things and exit the room. The experiment leader will give you more information about the study.

        Press space to finish
    KeyboardComponent space_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_break
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    CodeComponent block_counter
      Code Type = Auto->JS
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      Begin Experiment:
        nBlocks=0
      Each Frame:
        #if nBlocks==1:
        #    continueRoutine=False
      End Routine:
        nBlocks+=1
    TextComponent break_text
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        You can take a quick break to rest your eyes.

        The experiment will resume automatically in
    TextComponent countdown
      letterHeight = 0.03
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $int(round(10 - t, 3))
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    KeyboardComponent space_continue_6
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine example_grating
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    GratingComponent examplegrating
      mask = gauss
      pos = (350, 0)
      saveStartStop = False
      sf = 0.5
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      tex = sin
      units = deg
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  Routine welcome
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    TextComponent welcome_position
      letterHeight = 0.75
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Please position yourself comfortably in front of the computer, making sure that you can comfortably reach the keyboard. Try to keep this position throughout the experiment.

        Press space to continue
    KeyboardComponent space_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent mouse_visible_2
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 2:10
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine block_break
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 101:200
    conditionsFile = pregen_params.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61010396, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61010396},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.60337632, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.60337632},
      {'og_eccentricity': -35, 'og_contrast': 1, 'og_q': 0.61869807, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.2, 'q': 0.61869807},
      {'og_eccentricity': 35, 'og_contrast': 0.0625, 'og_q': 0.55997489, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.55997489},
      {'og_eccentricity': -35, 'og_contrast': 0.25, 'og_q': 0.67488689, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.1, 'q': 0.67488689},
      {'og_eccentricity': -35, 'og_contrast': 0, 'og_q': 0.65214593, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0, 'q': 0.65214593},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4835406, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4835406},
      {'og_eccentricity': 35, 'og_contrast': 0.125, 'og_q': 0.48355817, 'eccentricity': 15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.48355817},
      {'og_eccentricity': -35, 'og_contrast': 0.0625, 'og_q': 0.67839508, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.02, 'q': 0.67839508},
      {'og_eccentricity': -35, 'og_contrast': 0.125, 'og_q': 0.4548179, 'eccentricity': -15, 'baseContrast': 0.5, 'contrastDelta': 0.05, 'q': 0.4548179}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
    Routine fix
    Routine trial
    Routine feedback
  LoopTerminator trials_2
  Routine block_break
  Routine outro
